{
    /**
     * General configuration of Orthanc
     **/

    // The logical name of this instance of Orthanc. This one is
    // displayed in Orthanc Explorer and at the URI "/system".
    "Name" : "MyOrthanc",

    // Path to the directory that holds the database
    "StorageDirectory" : "OrthancStorage",

    // Enable the transparent compression of the DICOM instances
    "StorageCompression" : false,

    // Maximum size of the storage in MB (a value of "0" indicates no
    // limit on the storage size)
    "MaximumStorageSize" : 0,

    // Maximum number of patients that can be stored at a given time
    // in the storage (a value of "0" indicates no limit on the number
    // of patients)
    "MaximumPatientCount" : 0,


    /**
     * Configuration of the HTTP server
     **/

    // HTTP port for the REST services and for the GUI
    "HttpPort" : 8042,



    /**
     * Configuration of the DICOM server
     **/

    // The DICOM Application Entity Title
    "DicomAet" : "ORTHANC",

    // Check whether the called AET corresponds during a DICOM request
    "DicomCheckCalledAet" : false,

    // The DICOM port
    "DicomPort" : 4242,



    /**
     * Security-related options
     **/

    // Whether remote hosts can connect to the HTTP server
    "RemoteAccessAllowed" : false,

    // Whether or not SSL is enabled
    "SslEnabled" : false,

    // Path to the SSL certificate
    "SslCertificate" : "certificate.pem",

    // Whether or not the password protection is enabled
    "AuthenticationEnabled" : false,

    // The list of the registered users. Because Orthanc uses HTTP
    // Basic Authentication, the passwords are stored as plain text.
    "RegisteredUsers" : {
        "alice" : "alicePassword"
    },



    /**
     * Network topology
     **/

    // The list of the known DICOM modalities
    "DicomModalities" : {
      /**
       * Uncommenting the following line would enable Orthanc to
       * connect to an instance of the "storescp" open-source DICOM
       * store started by the command line "storescp 2000".
       **/
      // "sample" : [ "STORESCP", "localhost", 2000 ]
    },

    // The list of the known Orthanc peers (currently unused)
    "OrthancPeers" : {
    }
}
